CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^r(?P<Row>[0-9]{2})c(?P<Col>[0-9]{2})f(?P<Field>[0-9]{2})p(?P<Plane>[0-9]{2})-ch(?P<Channel>[0-9])sk1fk1fl1\.tiff$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "1")
    Name to assign these images:ER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "2")
    Name to assign these images:AGP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "3")
    Name to assign these images:MITO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "4")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Col
    Metadata category:Row

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):4,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Median
    Variance method:Standard deviation
    # of deviations:2.0
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
ConvertObjectsToImage:[module_num:6|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
    Select the input objects:Nuclei
    Name the output image:NucleiMask
    Select the color format:Binary (black & white)
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
ErodeImage:[module_num:7|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
    Select the input image:NucleiMask
    Name the output image:NucleiEro
    Structuring element:disk,15

RemoveHoles:[module_num:8|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
    Select the input image:NucleiEro
    Name the output image:RemoveHoles
    Size of holes to fill:100

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:RemoveHoles
    Name the primary objects to be identified:Spheroid
    Typical diameter of objects, in pixel units (Min,Max):1,700
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.8
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
ExpandOrShrinkObjects:[module_num:10|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
    Select the input objects:Spheroid
    Name the output objects:Spheroid_expanded
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:15
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
SplitOrMergeObjects:[module_num:11|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
    Select the input objects:Spheroid_expanded
    Name the new objects:Spheroid_merge
    Operation:Merge
    Maximum distance within which to merge objects:1
    Merge using a grayscale image?:No
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    Merging method:Distance
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
MeasureObjectSizeShape:[module_num:12|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
    Select object sets to measure:Spheroid_merge
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:13|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
    Select the objects to filter:Spheroid_merge
    Name the output objects:Spheroid_filter
    Select the filtering mode:Measurements
    Select the filtering method:Maximal
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
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
DilateObjects:[module_num:14|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
    Select the input object:Spheroid_filter
    Name the output object:Spheroid_dilated
    Structuring element:disk,4

MeasureObjectSizeShape:[module_num:15|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
    Select object sets to measure:Spheroid_dilated
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:16|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
    Select the objects to filter:Spheroid_dilated
    Name the output objects:Spheroid_filter2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:50000
    Filter using a maximum measurement value?:No
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
OverlayOutlines:[module_num:17|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:DNA_SpheroidOverlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:Spheroid_filter2

SaveImages:[module_num:18|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:DNA_SpheroidOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:tiff
    Output file location:Elsewhere...|Y:\\CELL_PAINTING_2024_EXPORT\\CP3D\\20251003_AKURA_HEPG2_C2386R1_72h_CP__2025-10-03T12_50_18-Measurement 2\\Images Overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:First cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectSizeShape:[module_num:19|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
    Select object sets to measure:Spheroid_filter2
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:20|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
    Select images to measure:AGP, DNA, ER, MITO
    Select objects to measure:Spheroid_filter2

MeasureGranularity:[module_num:21|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
    Select images to measure:AGP, DNA, ER, MITO
    Measure within objects?:Yes
    Select objects to measure:Spheroid_filter2
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureColocalization:[module_num:22|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
    Select images to measure:AGP, DNA, ER, MITO
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Spheroid_filter2
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureObjectIntensityDistribution:[module_num:23|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
    Select images to measure:AGP, DNA, ER, MITO
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Spheroid_filter2
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureTexture:[module_num:24|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
    Select images to measure:AGP, DNA, ER, MITO
    Select objects to measure:Spheroid_filter2
    Enter how many gray levels to measure the texture at:256
    Hidden:4
    Measure whole images or objects?:Objects
    Texture scale to measure:3
    Texture scale to measure:5
    Texture scale to measure:10
    Texture scale to measure:20

ExportToSpreadsheet:[module_num:25|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|C:\\CP3D - cellprofiler\\C2386 R1 - Resultados
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Spheroid_filter2|Granularity_6_DNA,Spheroid_filter2|Granularity_6_ER,Spheroid_filter2|Granularity_6_MITO,Spheroid_filter2|Granularity_6_AGP,Spheroid_filter2|Granularity_9_AGP,Spheroid_filter2|Granularity_9_DNA,Spheroid_filter2|Granularity_9_MITO,Spheroid_filter2|Granularity_9_ER,Spheroid_filter2|Granularity_2_ER,Spheroid_filter2|Granularity_2_AGP,Spheroid_filter2|Granularity_2_MITO,Spheroid_filter2|Granularity_2_DNA,Spheroid_filter2|Granularity_13_ER,Spheroid_filter2|Granularity_13_DNA,Spheroid_filter2|Granularity_13_AGP,Spheroid_filter2|Granularity_13_MITO,Spheroid_filter2|Granularity_11_DNA,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CP3D_C2388_R1-R4_
    Overwrite existing files without warning?:No
    Data to export:Spheroid_filter2
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
